<?xml version="1.0" encoding="utf-8"?>
<Parameters FOVx="256" FOVy="256" FOVz="1" GradMaxAmpl="2" GradSlewRate="10" Name="P" Nx="128" Ny="128" Nz="1" TE="6" TR="12">
   <ConcatSequence Name="R">
      <ConcatSequence Name="Cp" Repetitions="192">
         <ATOMICSEQUENCE Name="A1p">
            <HARDRFPULSE Axis="RF" Duration="0.1" FlipAngle="70" InitialPhase="90+(-1)^a1*90" Name="P1p" Observe="Cp,Counter/Cp,Repetitions"/>
         </ATOMICSEQUENCE>
         <DELAYATOMICSEQUENCE Delay="a1" DelayType="B2E" Name="D2p" Observe="P,TR" StartSeq="A1p"/>
      </ConcatSequence>
      <ConcatSequence Name="C" Observe="P,Ny" Repetitions="a1">
         <ATOMICSEQUENCE Name="A1">
            <HARDRFPULSE Axis="RF" Duration="0.1" FlipAngle="70" InitialPhase="90+(-1)^a1*90" Name="P1" Observe="C,Counter/C,Repetitions"/>
         </ATOMICSEQUENCE>
         <DELAYATOMICSEQUENCE Delay="a1" DelayType="C2C" Name="D1" Observe="P,TE" StartSeq="A1" StopSeq="A3"/>
         <ATOMICSEQUENCE Name="A2">
            <TRAPGRADPULSE Area="-a1/2" Axis="GX" Name="P2" Observe="P4,Area"/>
            <TRAPGRADPULSE Area="a1-a2*a3" Axis="GY" Name="P3" Observe="P,KMAXy/C,Counter/P,DKy"/>
         </ATOMICSEQUENCE>
         <ATOMICSEQUENCE Name="A3">
            <TRAPGRADPULSE ADCs="a2" Axis="GX" FlatTopArea="-2*a1" FlatTopTime="6" Name="P4" Observe="P,KMAXx/P,Nx" PhaseLock="1"/>
         </ATOMICSEQUENCE>
         <ATOMICSEQUENCE Name="A4">
            <TRAPGRADPULSE Area="-a1/2" Axis="GX" Name="P5" Observe="P4,Area"/>
            <TRAPGRADPULSE Area="-a1" Axis="GY" Name="P6" Observe="P3,Area"/>
         </ATOMICSEQUENCE>
         <DELAYATOMICSEQUENCE Delay="a1" DelayType="B2E" Name="D2" Observe="P,TR" StartSeq="A1"/>
      </ConcatSequence>
   </ConcatSequence>
